PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = auditory_n_back
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      disabled = True
      stopVal [duration (s)] = 10
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        This is an auditory n-back task where the current stimulus is correct if it matches the stimulus n back.

        Please have your eyes closed during the experiment.
    KeyboardComponent force_end_of_routine_if_pressed_3
      allowedKeys = 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent intro_instructions
      sound [set every repeat] = audio_instructions/intro_instructions.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Countdown
    RoutineSettingsComponent Countdown
      stopVal [duration (s)] = 1
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text [set every frame]:
        $str(1-int(t))
    KeyboardComponent force_end_of_routine_if_pressed_5
      allowedKeys = 'f', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Settings
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    CodeComponent code_exp_settings
      Code Type = Py
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      Begin Experiment:
        import numpy as np
        from scipy.stats import norm

        # Single RNG for this session
        rng = np.random.default_rng()

        # ======================================================
        # ENABLE/DISABLE PRACTICE BLOCKS
        # ======================================================
        USE_PRACTICE = True  # Set to False to skip practice entirely

        # ======================================================
        # PAIR PRACTICE WITH MAIN BLOCKS
        # ======================================================
        PAIR_PRACTICE_WITH_MAIN = True  # Set to True to run practice immediately before each main block
                                         # Set to False to run all practice blocks first, then all main blocks
                                         # NOTE: This only works if USE_PRACTICE = True

        # ======================================================
        # PHASE CONFIGURATIONS
        # ======================================================
        # Define all task phases (practice, main, etc.)
        # This is the ONLY place you need to change parameters!

        # Define practice configuration
        practice_config = {
            'phase_name': 'practice',
            'phase_display_name': 'Practice',
            'n_back_blocks': [0,1,2],         # Which n-back levels
            'num_trials_per_block': 5,      # Scorable trials per block
            'num_blocks_per_condition': 1,  # Repetitions of each n-back level
            'target_percentage': 1/3,       # Target trial proportion
            'zero_back_target_idx': 0,      # Index for 0-back target
            'randomization_type': 1,        # 1=shuffle then repeat, 2=full shuffle, 3=sorted, other value->no randomization
            'show_transition_screen': False # Show screen before this phase starts
        }

        # Define main task configuration
        main_config = {
            'phase_name': 'main',
            'phase_display_name': 'Main Task',
            'n_back_blocks': [0,1,2],
            'num_trials_per_block': 60,
            'num_blocks_per_condition': 1,
            'target_percentage': 1/3,
            'zero_back_target_idx': 0,
            'randomization_type': 2,
            'show_transition_screen': True
        }

        # ------------------------------------------------------
        # Inter-Trial Interval (ITI) Settings (shared across all phases)
        # ------------------------------------------------------
        iti_fixed_duration = 1.75   # To test: 1.25, 1.75, 2.25
                                    # Fixed component of ITI in seconds, it already
                                    # has a minimum trial duration of stimulus_duration, set in
                                    # "code_iti_timing" in "n_back_trial" Routine
        iti_jitter_min = 0.0
        iti_jitter_max = 0.0




        # ======================================================
        # BUILD PHASE STRUCTURE BASED ON PAIRING SETTING
        # ======================================================

        # Safety check: Can't pair if practice is disabled
        if not USE_PRACTICE and PAIR_PRACTICE_WITH_MAIN:
            print("⚠️  WARNING: PAIR_PRACTICE_WITH_MAIN is True but USE_PRACTICE is False")
            print("   Pairing mode requires practice to be enabled. Disabling pairing.")
            PAIR_PRACTICE_WITH_MAIN = False

        if USE_PRACTICE and PAIR_PRACTICE_WITH_MAIN:
            # PAIRED MODE: Each practice block is paired with its corresponding main block
            print("🎯 PAIRED PRACTICE MODE ENABLED")
            print("   Each practice block will run immediately before its corresponding main block")

            # Find common n-back levels between practice and main
            practice_n_levels = set(practice_config['n_back_blocks'])
            main_n_levels = set(main_config['n_back_blocks'])

            # Determine which levels can be paired
            paired_levels = sorted(list(practice_n_levels & main_n_levels))
            practice_only_levels = sorted(list(practice_n_levels - main_n_levels))
            main_only_levels = sorted(list(main_n_levels - practice_n_levels))

            print(f"   Paired levels: {paired_levels}")
            if practice_only_levels:
                print(f"   Practice-only levels: {practice_only_levels}")
            if main_only_levels:
                print(f"   Main-only levels: {main_only_levels}")

            # Create paired phase configs
            phase_configs = []

            # Add practice-only blocks first (if any)
            if practice_only_levels:
                practice_only_config = practice_config.copy()
                practice_only_config['n_back_blocks'] = practice_only_levels
                practice_only_config['phase_name'] = 'practice_unpaired'
                practice_only_config['phase_type'] = 'practice'  # Add type marker
                practice_only_config['show_transition_screen'] = False
                phase_configs.append(practice_only_config)

            # Create paired blocks
            for n_level in paired_levels:
                # Practice block for this n-back level
                paired_practice_config = practice_config.copy()
                paired_practice_config['n_back_blocks'] = [n_level]
                paired_practice_config['phase_name'] = f'practice_{n_level}back'
                paired_practice_config['phase_display_name'] = f'Practice {n_level}-back'
                paired_practice_config['phase_type'] = 'practice'  # Add type marker
                paired_practice_config['show_transition_screen'] = False
                phase_configs.append(paired_practice_config)

                # Main block for this n-back level (immediately after practice)
                paired_main_config = main_config.copy()
                paired_main_config['n_back_blocks'] = [n_level]
                paired_main_config['phase_name'] = f'main_{n_level}back'
                paired_main_config['phase_display_name'] = f'Main {n_level}-back'
                paired_main_config['phase_type'] = 'main'  # Add type marker
                paired_main_config['show_transition_screen'] = True
                phase_configs.append(paired_main_config)

            # Add main-only blocks last (if any)
            if main_only_levels:
                main_only_config = main_config.copy()
                main_only_config['n_back_blocks'] = main_only_levels
                main_only_config['phase_name'] = 'main_unpaired'
                main_only_config['phase_type'] = 'main'  # Add type marker
                main_only_config['show_transition_screen'] = True
                phase_configs.append(main_only_config)

            # Now shuffle the PAIRS (not individual blocks)
            # We need to keep practice-main pairs together
            pair_indices = []
            unpaired_indices = []

            for i, config in enumerate(phase_configs):
                if config['phase_name'].startswith('practice_') and config['phase_name'] != 'practice_unpaired':
                    # This is a paired practice block, store the pair indices
                    pair_indices.append((i, i+1))  # Practice and its following main block
                elif config['phase_name'] in ['practice_unpaired', 'main_unpaired']:
                    unpaired_indices.append(i)

            # Randomize the pairs if randomization is enabled
            if main_config['randomization_type'] in [1, 2]:
                rng.shuffle(pair_indices)

            # Rebuild phase_configs in the new order
            new_phase_configs = []

            # Add unpaired practice blocks first
            for idx in unpaired_indices:
                if phase_configs[idx]['phase_name'] == 'practice_unpaired':
                    new_phase_configs.append(phase_configs[idx])

            # Add paired blocks in randomized order
            for practice_idx, main_idx in pair_indices:
                new_phase_configs.append(phase_configs[practice_idx])
                new_phase_configs.append(phase_configs[main_idx])

            # Add unpaired main blocks last
            for idx in unpaired_indices:
                if phase_configs[idx]['phase_name'] == 'main_unpaired':
                    new_phase_configs.append(phase_configs[idx])

            phase_configs = new_phase_configs

        elif USE_PRACTICE:
            # TRADITIONAL MODE: All practice blocks first, then all main blocks
            practice_config['phase_type'] = 'practice'  # Add type marker
            main_config['phase_type'] = 'main'  # Add type marker
            phase_configs = [practice_config, main_config]
            print("🎯 PRACTICE MODE ENABLED (Traditional)")
            print("   All practice blocks will run first, then all main blocks")
        else:
            # NO PRACTICE MODE
            main_config['phase_type'] = 'main'  # Add type marker
            phase_configs = [main_config]
            main_config['show_transition_screen'] = False
            print("🚀 PRACTICE MODE DISABLED - Starting directly with main task")


        # ------------------------------------------------------
        # Stimulus sounds (shared across all phases)
        # ------------------------------------------------------
        stimulus_list = [
            'resources/stimulus_audio/sine_wave_frequency128_duration0.75s_tagging_frequency43Hz_modulation_depth1.0_base_amplitude0.5.wav',
            'resources/stimulus_audio/sine_wave_frequency256_duration0.75s_tagging_frequency43Hz_modulation_depth1.0_base_amplitude0.5.wav',
            'resources/stimulus_audio/sine_wave_frequency512_duration0.75s_tagging_frequency43Hz_modulation_depth1.0_base_amplitude0.5.wav',
            'resources/stimulus_audio/sine_wave_frequency880_duration0.75s_tagging_frequency43Hz_modulation_depth1.0_base_amplitude0.5.wav'
        ]

        # ------------------------------------------------------
        # Audio instruction files (shared)
        # ------------------------------------------------------
        instruction_files = {
            0: 'resources/audio_instructions/next_block_info_zero_back_01.wav',
            1: 'resources/audio_instructions/next_block_info_one_back_01.wav',
            2: 'resources/audio_instructions/next_block_info_two_back_01.wav',
            3: 'resources/audio_instructions/next_block_info_three_back_01.wav'
        }

        otherwise_press_files = {
            0: 'resources/audio_instructions/next_block_otherwise_press_the_left_button.wav',
            1: 'resources/audio_instructions/0_75_s_silence_48000Hz.wav',
            2: 'resources/audio_instructions/0_75_s_silence_48000Hz.wav',
            3: 'resources/audio_instructions/0_75_s_silence_48000Hz.wav'
        }

        press_to_continue_audio = 'resources/audio_instructions/press_to_continue_audio.wav'
        thank_you_audio = 'resources/audio_instructions/thank_you_audio.wav'

        # ======================================================
        # BLOCK GENERATION FUNCTION (works for any phase)
        # ======================================================
        def make_nback_block(n_back_level, n_trials, target_pct, rng, stim_list=stimulus_list, target_idx=0):
            """
            Generate a single n-back block with target and non-target trials

            Args:
                n_back_level: The n in n-back (0, 1, 2, 3, etc.)
                n_trials: Number of scorable trials (will add n baseline trials)
                target_pct: Proportion of trials that should be targets (e.g., 0.33)
                rng: Random number generator
                stim_list: List of stimulus filenames
                target_idx: Index of target stimulus for 0-back task

            Returns:
                stimulus_sequence: List of stimulus filenames
                trial_types: List of trial types ('baseline', 'target', 'non-target')
            """
            n = n_back_level
            num_trials_total = n_trials + n

            # Calculate target trials
            n_target_trials = int(n_trials * target_pct)

            # Create trial type sequence
            trial_types = ['baseline'] * n
            trial_types += ['target'] * n_target_trials
            trial_types += ['non-target'] * (num_trials_total - len(trial_types))

            # Shuffle only trials after first n
            remaining_trials = trial_types[n:]
            rng.shuffle(remaining_trials)
            trial_types = trial_types[:n] + remaining_trials

            # Generate all stimuli for this block
            stimulus_sequence = []

            for i, t_type in enumerate(trial_types):
                if t_type == 'target' and i >= n:
                    if n == 0:
                        stim = stim_list[target_idx]
                    else:
                        stim = stimulus_sequence[i - n]
                else:
                    valid_stim_found = False
                    attempts = 0
                    while not valid_stim_found and attempts < 100:
                        stim = rng.choice(stim_list)

                        if n == 0:
                            if t_type == 'baseline' or stim != stim_list[target_idx]:
                                valid_stim_found = True
                        elif i >= n:
                            if t_type == 'baseline' or stim != stimulus_sequence[i - n]:
                                valid_stim_found = True
                        else:
                            valid_stim_found = True

                        attempts += 1

                    if not valid_stim_found:
                        print(f"Warning: Could not find valid stimulus after 100 attempts for trial {i}")

                stimulus_sequence.append(stim)

            return stimulus_sequence, trial_types


        def generate_block_order(n_back_blocks, num_blocks_per_condition, randomization_type, rng):
            """Generate block order based on randomization type"""
            num_blocks = num_blocks_per_condition * len(n_back_blocks)

            if randomization_type == 2:  # Full shuffle
                block_order = n_back_blocks * num_blocks_per_condition
                rng.shuffle(block_order)
                block_order = block_order[:num_blocks]
            elif randomization_type == 1:  # Shuffle initial order but repeat
                block_order = n_back_blocks.copy()
                rng.shuffle(block_order)
                block_order = block_order * num_blocks_per_condition
                block_order = block_order[:num_blocks]
            elif randomization_type == 3:  # Sorted blocks by type
                block_order = [item for item in n_back_blocks for _ in range(num_blocks_per_condition)]
            else:  # No randomization
                block_order = n_back_blocks * num_blocks_per_condition

            return block_order


        def generate_iti_durations(num_trials, iti_fixed, iti_jitter_min, iti_jitter_max, rng):
            """Generate ITI durations for a block"""
            iti_durations = []
            for _ in range(num_trials):
                jitter = rng.uniform(iti_jitter_min, iti_jitter_max)
                total_iti = iti_fixed + jitter
                iti_durations.append(total_iti)
            return iti_durations


        # ======================================================
        # GENERATE ALL PHASES DATA
        # ======================================================
        # This dictionary will hold ALL pre-generated data for ALL phases
        all_phases_data = {}

        print("=" * 60)
        print("GENERATING ALL TASK PHASES")
        print("=" * 60)

        for phase_idx, config in enumerate(phase_configs):
            phase_name = config['phase_name']
            print(f"\n📋 Phase {phase_idx + 1}: {config['phase_display_name']}")
            print("-" * 60)

            # Calculate number of blocks for this phase
            num_blocks = config['num_blocks_per_condition'] * len(config['n_back_blocks'])

            # Generate block order
            block_order = generate_block_order(
                config['n_back_blocks'],
                config['num_blocks_per_condition'],
                config['randomization_type'],
                rng
            )

            print(f"Block order: {block_order}")

            # Pre-generate all blocks and ITIs for this phase
            blocks_stimuli = {}
            blocks_trial_types = {}
            blocks_iti = {}

            for block_idx in range(num_blocks):
                block_type = block_order[block_idx]
                block_key = f"{phase_name}_block_{block_idx}"

                # Number of trials in this block
                num_trials_this_block = config['num_trials_per_block'] + block_type

                # Generate stimuli
                stimulus_sequence, trial_types = make_nback_block(
                    n_back_level=block_type,
                    n_trials=config['num_trials_per_block'],
                    target_pct=config['target_percentage'],
                    rng=rng,
                    stim_list=stimulus_list,
                    target_idx=config['zero_back_target_idx']
                )

                # Generate ITI durations
                iti_durations = generate_iti_durations(
                    num_trials_this_block,
                    iti_fixed_duration,
                    iti_jitter_min,
                    iti_jitter_max,
                    rng
                )

                # Store
                blocks_stimuli[block_key] = stimulus_sequence
                blocks_trial_types[block_key] = trial_types
                blocks_iti[block_key] = iti_durations

                print(f"  Block {block_idx}: {block_type}-back, {len(stimulus_sequence)} trials, "
                      f"ITI range: {min(iti_durations):.3f}s - {max(iti_durations):.3f}s")

            # Store everything for this phase
            all_phases_data[phase_name] = {
                'config': config,
                'num_blocks': num_blocks,
                'block_order': block_order,
                'blocks_stimuli': blocks_stimuli,
                'blocks_trial_types': blocks_trial_types,
                'blocks_iti': blocks_iti
            }

        print("\n" + "=" * 60)
        print("✓ All phases generated successfully!")
        print("=" * 60)

        # ======================================================
        # INITIALIZE TRACKING VARIABLES
        # ======================================================
        # These will be reset at the start of each phase/block
        current_phase_idx = 0
        current_phase_name = phase_configs[0]['phase_name']
        current_block_in_phase = 0

        # Phase-level tracking
        phase_block_counter = 0  # Tracks blocks within current phase

        # Block-level tracking (reset each block)
        block_type = 0
        block_instructions = 0
        zero_back_sound_to_match_to = 0
        total_correct = 0
        block_hits = 0
        block_incorrect_rejection = 0
        block_miss_no_response_on_target = 0
        block_correct_rejections = 0
        block_false_alarms = 0
        block_no_response_on_non_target = 0

        # Trial-level tracking
        corrAns = None

        print(f"\n🎯 Starting with phase: {current_phase_name}")

        # Initialize phase transition message (used in Phase_Transition routine)
        phase_transition_message = ""
      End Routine:
        # Log experiment settings
        thisExp.addData('exp_setting_logged', True)

        # Log phase configurations
        for idx, config in enumerate(phase_configs):
            thisExp.addData(f'phase_{idx}_name', config['phase_name'])
            thisExp.addData(f'phase_{idx}_n_back_blocks', str(config['n_back_blocks']))
            thisExp.addData(f'phase_{idx}_trials_per_block', config['num_trials_per_block'])
            thisExp.addData(f'phase_{idx}_num_blocks', config['num_blocks_per_condition'])

        thisExp.addData('exp_num_phases', len(phase_configs))
        thisExp.addData('exp_iti_fixed', iti_fixed_duration)
        thisExp.addData('exp_iti_jitter_range', f"{iti_jitter_min}-{iti_jitter_max}")
    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK -ID-TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        #Spectal code-10s task ID for tmo muscle arturact task)
        task_ID_code = 109
        print("Starting experiment: < Auditory N-back Task >. Task ID:", task_ID_code)

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        audio_start_code = 10
        audio_end_code = 11
        feedback_start_code = 12


        ''' FROM NBACK FLANKER - POSSIBLY ADD FOR YOUR AS WELL
        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        iti_start_code = 9
        letter_start_code = 10
        cue_start_code = 11
        feedback_start_code = 12
        '''
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name in ['Cedrus C-POD', 'Cedrus StimTracker Quad'], "Incorrect XID device detected."
            if dev.device_name == 'Cedrus C-POD':
                pod_name = 'C-POD'
            else:
                pod_name = 'M-POD'
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print(f"{pod_name}<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C/M-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
  Routine Information_about_block
    RoutineSettingsComponent Information_about_block
      stopVal [duration (s)] = 20
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    CodeComponent setup_block
      Code Type = Py
      Begin Routine:
        # ======================================================
        # GET CURRENT PHASE AND BLOCK DATA
        # ======================================================
        current_phase_name = phase_configs[phase_loop.thisN]['phase_name']
        current_phase_data = all_phases_data[current_phase_name]
        current_config = current_phase_data['config']

        # Get block information
        block_order = current_phase_data['block_order']
        block_type = block_order[block.thisN]
        n_back_condition = block_type
        n = n_back_condition
        num_trials_per_block = current_config['num_trials_per_block']
        num_trials_this_block = num_trials_per_block + n

        # ======================================================
        # SET PRACTICE INDICATOR AUDIO (FIXED)
        # ======================================================
        # Check if this is a practice phase using the phase_type marker
        is_practice_phase = current_config.get('phase_type', 'main') == 'practice'

        # Alternative check: look at phase_name patterns
        if not is_practice_phase:
            # Also check if phase_name contains 'practice'
            is_practice_phase = 'practice' in current_phase_name.lower()

        if is_practice_phase:
            practice_indicator_audio = 'resources/audio_instructions/this_is_practice.wav'
            practice_indicator_duration = 2.0  # Duration of your audio file
            print(f"  ✓ Practice mode detected - will play practice indicator")
        else:
            practice_indicator_audio = 'resources/audio_instructions/this_is_the_main_task.wav'
            practice_indicator_duration = 4.0
            print(f"  ✓ Main task mode detected - will play main task indicator")

        # Adjust timing for subsequent sounds
        instruction_start_time = practice_indicator_duration + 0.3  # Small gap

        sound_to_match_if_0_back_start_time = practice_indicator_duration + 0.3 + 7.5
        ir_zero_otherwise_press_start_time = practice_indicator_duration + 0.3 + 8.3
        press_to_continue_prompt_start_time = practice_indicator_duration + 0.3 + 11.75


        # ======================================================
        # RESET BLOCK-LEVEL TRACKING
        # ======================================================
        total_correct = 0
        block_hits = 0
        block_incorrect_rejection = 0
        block_miss_no_response_on_target = 0
        block_correct_rejections = 0
        block_false_alarms = 0
        block_no_response_on_non_target = 0

        # ======================================================
        # SET BLOCK-SPECIFIC INSTRUCTIONS
        # ======================================================
        block_message = f"{current_config['phase_display_name']}: {block_type}-back task"
        block_instructions = instruction_files[block_type]
        otherwise_press = otherwise_press_files[block_type]

        # Set zero-back target if applicable
        if block_type == 0:
            zero_back_sound_to_match_to = stimulus_list[current_config['zero_back_target_idx']]
        else:
            zero_back_sound_to_match_to = "resources/audio_instructions/0_75_s_silence_48000Hz.wav"

        # Calculate absolute block number
        absolute_block_number = sum(all_phases_data[phase_configs[i]['phase_name']]['num_blocks']
                                   for i in range(phase_loop.thisN)) + block.thisN + 1

        print(f"\n{'='*60}")
        print(f"{'[PRACTICE] ' if is_practice_phase else '[MAIN] '}"
              f"Phase: {current_config['phase_display_name']} | "
              f"Block {block.thisN + 1}/{current_phase_data['num_blocks']} | "
              f"{block_type}-back | "
              f"{num_trials_this_block} trials")
        print(f"{'='*60}")

        # Verify pre-generated stimuli
        block_key = f"{current_phase_name}_block_{block.thisN}"
        print(f"Using pre-generated stimuli: {block_key}")

        # Timeout and response tracking
        timeout_duration = 5
        timeout_start = None
        response_made = False
      End Routine:
        if 'f' in force_advance.keys or '2' in force_advance.keys:
            info_loop.finished = True

        if any(k in end_routine.keys for k in ['y', 'n', 'left', 'right', 'space', '3', '6']):
            info_loop.finished = True
    TextComponent block_instruction
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11.75
      text [set every repeat] = $block_message
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    SoundComponent n_back_instructions
      sound [set every repeat] = $block_instructions
      startVal [time (s)] = $instruction_start_time
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    SoundComponent sound_to_match_if_0_back
      sound [set every repeat] = $zero_back_sound_to_match_to
      startVal [time (s)] = $sound_to_match_if_0_back_start_time
      stopVal [duration (s)] = 0.75
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    SoundComponent ir_zero_otherwise_press
      sound [set every repeat] = $otherwise_press
      startVal [time (s)] = $ir_zero_otherwise_press_start_time
      stopVal [duration (s)] = 2.5
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    KeyboardComponent end_routine
      allowedKeys = 'y','n','left','right','space', '1', '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = $press_to_continue_prompt_start_time
      store = first key
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    SoundComponent press_to_continue_prompt
      sound [set every repeat] = $press_to_continue_audio
      startVal [time (s)] = $press_to_continue_prompt_start_time
      stopVal [duration (s)] = 5.0
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    KeyboardComponent force_advance
      allowedKeys = 'f', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent trigger_block_start_end
      Code Type = Py
      Begin Routine:
        if block.thisN>0:
            # End the main experiment trial block from the previous loop
            dev.activate_line(bitmask=block_end_code)
            core.wait(0.5)  # wait 500ms before next block start trigger

        # Start a main experiment trial block
        dev.activate_line(bitmask=block_start_code)
        # no need to wait 500ms as instructions are displayed
    SoundComponent practice_indicator_sound
      sound [set every repeat] = $practice_indicator_audio
      startVal [time (s)] = 0.0
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    TextComponent press_to_continue
      letterHeight = 0.05
      startVal [time (s)] = $press_to_continue_prompt_start_time
      text = Press right or left arrow key to continue
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  Routine n_back_trial
    RoutineSettingsComponent n_back_trial
      stopVal [duration (s)] = $total_trial_duration
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    CodeComponent setup_trial
      Code Type = Py
      Begin Experiment:
        # Initialize as None to distinguish from False
        corrAns = None
      Begin Routine:
        # ======================================================
        # GET CURRENT PHASE AND TRIAL DATA
        # ======================================================
        current_phase_name = phase_configs[phase_loop.thisN]['phase_name']
        current_phase_data = all_phases_data[current_phase_name]
        current_config = current_phase_data['config']

        # Retrieve pre-generated stimuli for this block
        block_key = f"{current_phase_name}_block_{block.thisN}"
        stimulus_sequence = current_phase_data['blocks_stimuli'][block_key]
        trial_types = current_phase_data['blocks_trial_types'][block_key]

        # Get current trial's values
        current_stimulus = stimulus_sequence[trials.thisN]
        trial_type = trial_types[trials.thisN]

        # Get n-back level for this block
        block_order = current_phase_data['block_order']
        n = block_order[block.thisN]

        # Determine if this is a baseline trial
        is_baseline_trial = trials.thisN < n

        print(f"  Trial {trials.thisN + 1}/{len(stimulus_sequence)}: "
              f"Stimulus={current_stimulus.split('_')[3]}, "
              f"Type={trial_type}, "
              f"Baseline={is_baseline_trial}")
      End Routine:
        # ======================================================
        # EXTRACT RESPONSE DATA
        # ======================================================
        keys = key_resp.keys

        if keys:
            if isinstance(keys, list):
                response_key = keys[0] if len(keys) > 0 else None
                rt = key_resp.rt[0] if key_resp.rt and len(key_resp.rt) > 0 else None
                num_responses = len(keys)
            else:
                response_key = keys
                rt = key_resp.rt
                num_responses = 1
        else:
            response_key = None
            rt = None
            num_responses = 0

        # ======================================================
        # CATEGORIZE RESPONSE TYPE
        # ======================================================
        if response_key:
            if response_key in ['y', 'right', 'r', '6']:
                response_type = 'target_response'
            elif response_key in ['n', 'left', 'l', '3']:
                response_type = 'non_target_response'
            else:
                response_type = 'invalid_response'
        else:
            response_type = 'no_response'

        # ======================================================
        # INITIALIZE PERFORMANCE METRICS
        # ======================================================
        is_hit = None
        is_incorrect_rejection = None
        is_miss_no_response_on_target = None
        is_correct_rejection = None
        is_false_alarm = None
        is_no_response_on_non_target = None

        # ======================================================
        # CALCULATE CORRECTNESS AND SDT METRICS
        # ======================================================
        if trials.thisN < n:
            # Baseline trials - not scored
            corrAns = None
            performance_category = 'baseline'
        else:
            # Scorable trials - apply Signal Detection Theory
            if trial_type == 'target':
                if response_type == 'target_response':
                    corrAns = True
                    performance_category = 'hit'
                    is_hit = 1
                    is_incorrect_rejection = 0
                    is_miss_no_response_on_target = 0
                    is_correct_rejection = 0
                    is_false_alarm = 0
                    is_no_response_on_non_target = 0
                    block_hits += 1
                elif response_type == 'non_target_response':
                    corrAns = False
                    performance_category = 'incorrect_rejection'
                    is_hit = 0
                    is_incorrect_rejection = 1
                    is_miss_no_response_on_target = 0
                    is_correct_rejection = 0
                    is_false_alarm = 0
                    is_no_response_on_non_target = 0
                    block_incorrect_rejection += 1
                else:
                    corrAns = False
                    performance_category = 'miss_no_response_on_target'
                    is_hit = 0
                    is_incorrect_rejection = 0
                    is_miss_no_response_on_target = 1
                    is_correct_rejection = 0
                    is_false_alarm = 0
                    is_no_response_on_non_target = 0
                    block_miss_no_response_on_target += 1
            else:  # non-target
                if response_type == 'non_target_response':
                    corrAns = True
                    performance_category = 'correct_rejection'
                    is_hit = 0
                    is_incorrect_rejection = 0
                    is_miss_no_response_on_target = 0
                    is_correct_rejection = 1
                    is_false_alarm = 0
                    is_no_response_on_non_target = 0
                    block_correct_rejections += 1
                elif response_type == 'target_response':
                    corrAns = False
                    performance_category = 'false_alarm'
                    is_hit = 0
                    is_incorrect_rejection = 0
                    is_miss_no_response_on_target = 0
                    is_correct_rejection = 0
                    is_false_alarm = 1
                    is_no_response_on_non_target = 0
                    block_false_alarms += 1
                else:
                    corrAns = False
                    performance_category = 'no_response_on_non_target'
                    is_hit = 0
                    is_incorrect_rejection = 0
                    is_miss_no_response_on_target = 0
                    is_correct_rejection = 0
                    is_false_alarm = 0
                    is_no_response_on_non_target = 1
                    block_no_response_on_non_target += 1

            # Update running total
            if corrAns:
                total_correct += 1

        # ======================================================
        # CALCULATE TRIAL POSITION METRICS
        # ======================================================
        trial_position_in_block = trials.thisN + 1
        scorable_trial_number = (trials.thisN + 1 - n) if trials.thisN >= n else 0

        # Determine target stimulus for verification
        if n == 0:
            target_stimulus = stimulus_list[current_config['zero_back_target_idx']]
        elif trials.thisN >= n:
            target_stimulus = stimulus_sequence[trials.thisN - n]
        else:
            target_stimulus = 'N/A'

        # Check if current stimulus matches target (ground truth)
        if trials.thisN >= n:
            if n == 0:
                is_match_trial = (current_stimulus == stimulus_list[current_config['zero_back_target_idx']])
            else:
                is_match_trial = (current_stimulus == stimulus_sequence[trials.thisN - n])
        else:
            is_match_trial = None

        # ======================================================
        # LOG ALL DATA TO CSV
        # ======================================================

        # Phase information
        thisExp.addData('phase_name', current_phase_name)
        thisExp.addData('phase_display_name', current_config['phase_display_name'])
        thisExp.addData('phase_number', phase_loop.thisN + 1)
        thisExp.addData('is_practice', 1 if current_phase_name == 'practice' else 0)

        # Participant and session
        thisExp.addData('participant_id', expInfo['participant'])
        thisExp.addData('session', expInfo.get('session', '001'))
        thisExp.addData('date', expInfo['date'])

        # Block-level information
        absolute_block_number = sum(all_phases_data[phase_configs[i]['phase_name']]['num_blocks']
                                   for i in range(phase_loop.thisN)) + block.thisN + 1
        thisExp.addData('absolute_block_number', absolute_block_number)
        thisExp.addData('block_number_in_phase', block.thisN + 1)
        thisExp.addData('n_back_level', n)
        thisExp.addData('block_type', f'{n}_back')
        thisExp.addData('trials_per_block', current_config['num_trials_per_block'])
        thisExp.addData('total_blocks_in_phase', current_phase_data['num_blocks'])

        # Trial-level information
        thisExp.addData('trial_number_overall', trials.thisN + 1)
        thisExp.addData('trial_number_in_block', trial_position_in_block)
        thisExp.addData('scorable_trial_number', scorable_trial_number)
        thisExp.addData('is_baseline_trial', 1 if trials.thisN < n else 0)

        # Stimulus information
        thisExp.addData('current_stimulus', current_stimulus)
        thisExp.addData('target_stimulus', target_stimulus)
        stimulus_freq = current_stimulus.split('_')[2].replace('frequency', '') if 'frequency' in current_stimulus else 'N/A'
        thisExp.addData('stimulus_frequency_hz', stimulus_freq)

        # Trial design
        thisExp.addData('trial_type', trial_type)
        thisExp.addData('is_match_trial', is_match_trial)

        # Response information
        thisExp.addData('response_key', response_key if response_key else 'none')
        thisExp.addData('response_type', response_type)
        thisExp.addData('reaction_time_ms', round(rt * 1000, 2) if rt else None)
        thisExp.addData('reaction_time_s', round(rt, 4) if rt else None)

        # Accuracy and performance
        thisExp.addData('correct', 1 if corrAns == True else (0 if corrAns == False else 'N/A'))
        thisExp.addData('accuracy_binary', corrAns if corrAns is not None else 'N/A')
        thisExp.addData('performance_category', performance_category)

        # SDT metrics
        thisExp.addData('hit', is_hit if is_hit is not None else 'N/A')
        thisExp.addData('incorrect_rejection', is_incorrect_rejection if is_incorrect_rejection is not None else 'N/A')
        thisExp.addData('miss_no_response_on_target', is_miss_no_response_on_target if is_miss_no_response_on_target is not None else 'N/A')
        thisExp.addData('correct_rejection', is_correct_rejection if is_correct_rejection is not None else 'N/A')
        thisExp.addData('false_alarm', is_false_alarm if is_false_alarm is not None else 'N/A')
        thisExp.addData('no_response_on_non_target', is_no_response_on_non_target if is_no_response_on_non_target is not None else 'N/A')

        # Running performance
        scorable_trials_so_far = max(0, trials.thisN + 1 - n)
        if scorable_trials_so_far > 0:
            running_accuracy = total_correct / scorable_trials_so_far
            thisExp.addData('running_accuracy', round(running_accuracy, 4))
            thisExp.addData('total_correct_so_far', total_correct)
            thisExp.addData('scorable_trials_so_far', scorable_trials_so_far)
        else:
            thisExp.addData('running_accuracy', 'N/A')
            thisExp.addData('total_correct_so_far', 0)
            thisExp.addData('scorable_trials_so_far', 0)

        # Timing
        thisExp.addData('trial_onset_time', t)

        # Context (previous stimuli)
        if trials.thisN >= 1:
            prev_stim_1 = stimulus_sequence[trials.thisN - 1]
            prev_freq_1 = prev_stim_1.split('_')[3].replace('frequency', '') if 'frequency' in prev_stim_1 else 'N/A'
            thisExp.addData('previous_stimulus_n1', prev_stim_1)
            thisExp.addData('previous_frequency_n1', prev_freq_1)
        else:
            thisExp.addData('previous_stimulus_n1', 'N/A')
            thisExp.addData('previous_frequency_n1', 'N/A')

        if trials.thisN >= 2:
            prev_stim_2 = stimulus_sequence[trials.thisN - 2]
            prev_freq_2 = prev_stim_2.split('_')[3].replace('frequency', '') if 'frequency' in prev_stim_2 else 'N/A'
            thisExp.addData('previous_stimulus_n2', prev_stim_2)
            thisExp.addData('previous_frequency_n2', prev_freq_2)
        else:
            thisExp.addData('previous_stimulus_n2', 'N/A')
            thisExp.addData('previous_frequency_n2', 'N/A')

        if trials.thisN >= 3:
            prev_stim_3 = stimulus_sequence[trials.thisN - 3]
            prev_freq_3 = prev_stim_3.split('_')[3].replace('frequency', '') if 'frequency' in prev_stim_3 else 'N/A'
            thisExp.addData('previous_stimulus_n3', prev_stim_3)
            thisExp.addData('previous_frequency_n3', prev_freq_3)
        else:
            thisExp.addData('previous_stimulus_n3', 'N/A')
            thisExp.addData('previous_frequency_n3', 'N/A')

        # Update key_resp.corr for PsychoPy
        if corrAns is None:
            key_resp.corr = -1
        else:
            key_resp.corr = int(corrAns)

        # Multiple responses
        thisExp.addData('num_responses', num_responses)
        if num_responses > 1:
            thisExp.addData('all_response_keys', str(keys))
            thisExp.addData('all_response_times', str([round(t * 1000, 2) for t in key_resp.rt]))
        else:
            thisExp.addData('all_response_keys', response_key if response_key else 'none')
            thisExp.addData('all_response_times', round(rt * 1000, 2) if rt else None)

        # ======================================================
        # LOG ITI INFORMATION
        # ======================================================
        thisExp.addData('iti_duration', round(current_iti_duration, 4))
        thisExp.addData('iti_fixed_component', iti_fixed_duration)
        thisExp.addData('iti_jitter_component', round(current_iti_duration - iti_fixed_duration, 4))
        thisExp.addData('stimulus_duration', stimulus_duration)
        thisExp.addData('total_trial_duration', round(total_trial_duration, 4))

        # Response timing analysis
        if rt is not None:
            if rt <= stimulus_duration:
                response_period = 'during_stimulus'
            else:
                response_period = 'during_iti'
                time_into_iti = rt - stimulus_duration
                thisExp.addData('response_time_into_iti', round(time_into_iti, 4))

            thisExp.addData('response_period', response_period)
        else:
            thisExp.addData('response_period', 'no_response')
            thisExp.addData('response_time_into_iti', 'N/A')

        # Console output
        # Format RT and accuracy for printing
        rt_str = f"{rt:.3f}" if rt else "N/A"
        acc_str = f"{running_accuracy:.2%}" if scorable_trials_so_far > 0 else "N/A"

        print(f"    {performance_category} | RT: {rt_str} | Acc: {acc_str}")
    TextComponent Intro
      color [set every repeat] = 0.9608, 0.8431, 0.6863
      draggable = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_duration
      text [set every repeat] = Sound
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    SoundComponent sound_1
      sound [set every repeat] = $current_stimulus
      startVal [time (s)] = 0.0
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    JoystickComponent joystick
      deviceNumber = 0
      disabled = True
      forceEndRoutineOnPress = never
      saveJoystickState = final
      saveParamsClickable = name, corrAns
      startVal [time (s)] = 0.0
      timeRelativeTo = joystick onset
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'y','n','left','right', '1', '3', '4', '5', '6'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    KeyboardComponent force_advance_2
      allowedKeys = 'f', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 14.75
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    CodeComponent trigger_trial
      Code Type = Py
      Begin Routine:
        audio_trigger_started = False
        audio_end_started = False
      Each Frame:
        if sound_1.status == STARTED and not audio_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=audio_start_code)
            audio_trigger_started = True
            thisExp.addData('audio_trigger_sent', True)  # Log trigger was sent

        if sound_1.status == FINISHED and not audio_end_started:
            win.callOnFlip(dev.activate_line, bitmask=audio_end_code)
            audio_end_started = True
            thisExp.addData('audio_end_trigger_sent', True)


        '''
        Adapted from Alex's n-back/flanker code so might not need the second trigger
        '''
    CodeComponent code_iti_timing
      Code Type = Py
      Begin Routine:
        # Get phase and block info
        current_phase_name = phase_configs[phase_loop.thisN]['phase_name']
        current_phase_data = all_phases_data[current_phase_name]

        # Get ITI for this trial
        block_key = f"{current_phase_name}_block_{block.thisN}"
        current_iti_duration = current_phase_data['blocks_iti'][block_key][trials.thisN]

        # Sound duration
        stimulus_duration = 0.75

        # Total trial duration
        total_trial_duration = stimulus_duration + current_iti_duration
        iti_start_time = stimulus_duration

        print(f"    Stimulus={stimulus_duration}s, ITI={current_iti_duration:.3f}s, Total={total_trial_duration:.3f}s")
    TextComponent text_iti_fixation
      letterHeight = 0.05
      startVal [time (s)] = $iti_start_time
      stopVal [duration (s)] = $current_iti_duration
      text = +
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  Routine Feedback_accuracy_RT
    RoutineSettingsComponent Feedback_accuracy_RT
      stopVal [duration (s)] = 0.25
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    CodeComponent fb_code
      Code Type = Py
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      Begin Routine:
        # Provide feedback based on the previous trial
        fb_text = 'no key_resp component found - check console'
        fb_col = 'black'

        try:
            # Check if this was a baseline trial
            if trials.thisN < n:
                fb_text = 'Baseline trial'
                fb_col = 'blue'
            elif key_resp.corr == 1:
                fb_text = 'Correct!'
                fb_col = 'green'
            elif key_resp.corr == 0:
                fb_text = 'Incorrect'
                fb_col = 'red'
            else:
                fb_text = 'No response recorded'
                fb_col = 'orange'

        except Exception as e:
            print(f'Feedback error: {e}')
            print('Make sure key_resp component exists and "Store Correct" is enabled')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb_text
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    CodeComponent rt_fb_code
      Code Type = Py
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      Begin Routine:
        # Provide RT feedback that works with "Store All Keys" mode
        fb_text = 'No key press detected. Please press left or right arrow.'

        try:
            rt = key_resp.rt
            # Handle both single value and list
            if rt:
                if isinstance(rt, list):
                    rt_value = rt[0]  # Use first response time
                else:
                    rt_value = rt
                fb_text = 'RT: ' + str(round(rt_value * 1000) / 1000) + ' seconds'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n2. that data is set to store from first or last key')
    TextComponent rt_fb
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb_text
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    CodeComponent trigger_fb
      Code Type = Py
      Begin Routine:
        feedback_trigger_started = False
      Each Frame:
        if fb.status == STARTED and not feedback_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=feedback_start_code)
            feedback_trigger_started = True
  Routine Feedback_block
    RoutineSettingsComponent Feedback_block
      stopVal [duration (s)] = 5
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    CodeComponent fb_code_block_feedback_text
      Code Type = Py
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      Begin Experiment:
        # fb_col = 'black'
      Begin Routine:
        # Get phase info
        current_phase_name = phase_configs[phase_loop.thisN]['phase_name']
        current_config = all_phases_data[current_phase_name]['config']
        num_trials_per_block = current_config['num_trials_per_block']

        fb_col = 'black'

        if num_trials_this_block > n:
            total_trials = num_trials_per_block
            percent_correct = total_correct / total_trials

            phase_label = current_config['phase_display_name']
            fb_code_block_feedback_text = (
                f"{phase_label} Block Complete\n"
                f"Accuracy: {round(percent_correct * 100, 1)}%"
            )

            # Determine feedback audio
            if percent_correct >= 0.9:
                feedback_sound = 'resources/audio_instructions/performance_5_excellent.wav'
            elif percent_correct >= 0.8:
                feedback_sound = "resources/audio_instructions/performance_3_quite_good.wav"
            elif percent_correct >= 0.6:
                feedback_sound = "resources/audio_instructions/performance_2_okay.wav"
            else:
                feedback_sound = 'resources/audio_instructions/performance_1_not_so_good.wav'
        else:
            fb_code_block_feedback_text = 'Not enough trials'
            percent_correct = 0
            feedback_sound = 'resources/audio_instructions/performance_1_not_so_good.wav'

        # Calculate total misses
        block_total_misses = block_incorrect_rejection + block_miss_no_response_on_target

        # ======================================================
        # LOG BLOCK SUMMARY DATA
        # ======================================================
        absolute_block_number = sum(all_phases_data[phase_configs[i]['phase_name']]['num_blocks']
                                   for i in range(phase_loop.thisN)) + block.thisN + 1

        thisExp.addData('phase_name', current_phase_name)
        thisExp.addData('phase_display_name', current_config['phase_display_name'])
        thisExp.addData('is_practice', 1 if current_phase_name == 'practice' else 0)
        thisExp.addData('block_summary', True)
        thisExp.addData('absolute_block_number', absolute_block_number)
        thisExp.addData('block_number_in_phase', block.thisN + 1)
        thisExp.addData('block_final_accuracy', round(percent_correct, 4))
        thisExp.addData('block_n_back_level', n)
        thisExp.addData('block_total_scorable_trials', total_trials if num_trials_this_block > n else 0)
        thisExp.addData('block_total_correct', total_correct)
        thisExp.addData('block_total_hits', block_hits)
        thisExp.addData('block_total_incorrect_rejection', block_incorrect_rejection)
        thisExp.addData('block_total_miss_no_response_on_target', block_miss_no_response_on_target)
        thisExp.addData('block_total_misses', block_total_misses)
        thisExp.addData('block_total_false_alarms', block_false_alarms)
        thisExp.addData('block_total_correct_rejections', block_correct_rejections)
        thisExp.addData('block_total_no_response_on_non_target', block_no_response_on_non_target)

        # SDT metrics
        if block_hits + block_total_misses > 0:
            hit_rate = block_hits / (block_hits + block_total_misses)
            thisExp.addData('block_hit_rate', round(hit_rate, 4))
        else:
            thisExp.addData('block_hit_rate', 'N/A')

        if block_false_alarms + block_correct_rejections > 0:
            fa_rate = block_false_alarms / (block_false_alarms + block_correct_rejections)
            thisExp.addData('block_false_alarm_rate', round(fa_rate, 4))
        else:
            thisExp.addData('block_false_alarm_rate', 'N/A')

        # d-prime
        if 'hit_rate' in locals() and 'fa_rate' in locals() and hit_rate != 'N/A' and fa_rate != 'N/A':
            hit_rate_adj = min(max(hit_rate, 0.01), 0.99)
            fa_rate_adj = min(max(fa_rate, 0.01), 0.99)

            from scipy.stats import norm
            z_hit = norm.ppf(hit_rate_adj)
            z_fa = norm.ppf(fa_rate_adj)
            d_prime = z_hit - z_fa

            thisExp.addData('block_d_prime', round(d_prime, 4))
        else:
            thisExp.addData('block_d_prime', 'N/A')

        print(f"\n{current_config['phase_display_name']} Block {block.thisN + 1} Summary:")
        print(f"  Accuracy: {percent_correct:.2%}")
        print(f"  Hits: {block_hits}, IR: {block_incorrect_rejection}, Miss: {block_miss_no_response_on_target}")
        print(f"  FA: {block_false_alarms}, CR: {block_correct_rejections}, No resp (NT): {block_no_response_on_non_target}")
    TextComponent fb_2
      color [set every repeat] = $fb_col
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb_code_block_feedback_text
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    KeyboardComponent force_end_of_routine_if_pressed_2
      allowedKeys = 'f', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent fb_sound
      sound [set every repeat] = $feedback_sound
      startVal [time (s)] = 0.0
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  Routine Block_info
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $block_message
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    SoundComponent zero_back_instructions_2
      sound [set every repeat] = $zero_back_instructions
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    SoundComponent sound_to_match_if_0_back_2
      sound [set every repeat] = $zero_back_sound_to_match_to
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine test_block_message
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        block_type = block_type
    VariableComponent block_message_2
      saveEndExp = True
      saveStartRoutine = True
      saveStartStop = False
      startRoutineValue = f"Now starting {block_type}-back task"
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.75
      text = $block_message
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  Routine Variables
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  Routine n_back_structure_2
    RoutineSettingsComponent n_back_structure_2
      disabled = True
      stopVal [duration (s)] = 7.0
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    ImageComponent n_back_structure_img
      image = resources/images/2_back_task_structure.png
      size = (1.3, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    KeyboardComponent force_end_of_routine_if_pressed_4
      allowedKeys = 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp_finished
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    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The experiment is now finished.
        Thank you for participating!
    SoundComponent thank_you
      sound [set every repeat] = $thank_you_audio
      startVal [time (s)] = 0.0
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    CodeComponent trigger_trial_block_end
      Code Type = Py
      Begin Routine:
        # End of main experiment trial block
        dev.activate_line(bitmask=block_end_code)
        # no need to wait 500ms as this routine lasts 3.0s before experiment ends
  Routine Phase_Transition
    RoutineSettingsComponent Phase_Transition
      disabled = True
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    CodeComponent phase_transition_code
      Code Type = Py
      Begin Routine:
        # Get current phase config
        current_config = phase_configs[phase_loop.thisN]
        phase_name = current_config['phase_name']

        # Determine if we should show this screen
        show_screen = current_config.get('show_transition_screen', False)

        if phase_loop.thisN == 0:
            # First phase - show starting message
            phase_transition_message = f"Starting {current_config['phase_display_name']}"
            show_screen = False  # Usually skip for first phase
        elif show_screen:
            # Transitioning to new phase
            phase_transition_message = (
                f"{phase_configs[phase_loop.thisN - 1]['phase_display_name']} complete!\n\n"
                f"Starting {current_config['phase_display_name']}\n\n"
                "Press SPACE to continue"
            )
        else:
            # Skip this routine
            phase_transition_message = ""

        # Skip routine if not needed
        if not show_screen:
            continueRoutine = False

        print(f"\n{'='*60}")
        print(f"PHASE TRANSITION: {phase_transition_message}")
        print(f"{'='*60}\n")
    TextComponent phase_transition_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $phase_transition_message
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Flow
  Routine Instructions
  Routine n_back_structure_2
  Routine Settings
  LoopInitiator phase_loop loopType="TrialHandler"
    loopType = sequential
    nReps = len(phase_configs)
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    Routine Phase_Transition
    LoopInitiator block loopType="TrialHandler"
      loopType = sequential
      nReps = all_phases_data[phase_configs[phase_loop.thisN]['phase_name']]['num_blocks']
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      LoopInitiator info_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 5
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        Routine Information_about_block
      LoopTerminator info_loop
      Routine Countdown
      LoopInitiator trials loopType="TrialHandler"
        loopType = sequential
        nReps = len(all_phases_data[phase_configs[phase_loop.thisN]['phase_name']]['blocks_stimuli'][f"{phase_configs[phase_loop.thisN]['phase_name']}_block_{block.thisN}"])
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        conditions:
          [{'Stimulus': 'sine_wave_frequency128_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'thisLetter': 'Test', 'target': None, 'corrAns': 'left'},
          {'Stimulus': 'sine_wave_frequency256_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'thisLetter': 'o', 'target': None, 'corrAns': 'left'},
          {'Stimulus': 'sine_wave_frequency440_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'thisLetter': 'test', 'target': 'sine_wave_frequency128_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'corrAns': 'left'},
          {'Stimulus': 'sine_wave_frequency512_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'thisLetter': 'testing', 'target': 'sine_wave_frequency256_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'corrAns': 'left'},
          {'Stimulus': 'sine_wave_frequency880_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'thisLetter': 'testtest', 'target': 'sine_wave_frequency440_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'corrAns': 'left'},
          {'Stimulus': 'sine_wave_frequency512_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'thisLetter': 'TestTest', 'target': 'sine_wave_frequency512_duration0.75s_tagging_frequency43Hz_modulation_depth1.0.wav', 'corrAns': 'right'}]
        Routine n_back_trial
        Routine Feedback_accuracy_RT
      LoopTerminator trials
      Routine Feedback_block
    LoopTerminator block
  LoopTerminator phase_loop
  Routine exp_finished
